CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (or (file does contain "Probabilities") (file does contain "FITC.tif") (file does contain "TXRED.tif"))

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:4
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Date>[0-9]{8})
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:_(?P<FoV_ID>[0-9]{4})_
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:_(?P<Well_ID>[0-9]{2})_
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "FITC")
    Name to assign these images:Green
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    Select the image type:Grayscale image
    Set intensity range from:Manual
    Maximum intensity:255.0
    Select the rule criteria:and (file does contain "TXRED")
    Name to assign these images:Red
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    Select the image type:Grayscale image
    Set intensity range from:Manual
    Maximum intensity:255.0
    Select the rule criteria:and (file does contain "Probabilities")
    Name to assign these images:Probabilities
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    Select the image type:Grayscale image
    Set intensity range from:Manual
    Maximum intensity:255.0

Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:3
    Metadata category:Date
    Metadata category:FoV_ID
    Metadata category:Well_ID

ErodeImage:[module_num:5|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enabled:False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
    Select the input image:Probabilities
    Name the output image:ErodeImage
    Structuring element:disk,4

DilateImage:[module_num:6|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enabled:False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
    Select the input image:ErodeImage
    Name the output image:DilateImage
    Structuring element:disk,6

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Probabilities
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):30,190
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:85
    Suppress local maxima that are closer than this minimum allowed distance:30
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.5,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
TrackObjects:[module_num:8|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
    Choose a tracking method:LAP
    Select the objects to track:Cells
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    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
    Select the movement model:Both
    Number of standard deviations for search radius:4
    Search radius limit, in pixel units (Min,Max):50,110
    Run the second phase of the LAP algorithm?:Yes
    Gap closing cost:100
    Split alternative cost:1
    Merge alternative cost:1
    Maximum gap displacement, in pixel units:70
    Maximum split score:100
    Maximum merge score:80
    Maximum temporal gap, in frames:2
    Filter objects by lifetime?:No
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    Mitosis alternative cost:80
    Maximum mitosis distance, in pixel units:1
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
MeasureObjectIntensity:[module_num:9|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
    Select images to measure:Green, Red
    Select objects to measure:Cells

MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:Cells
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MaskImage:[module_num:11|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
    Select the input image:Green
    Name the output image:green_background
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:Yes

MaskImage:[module_num:12|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
    Select the input image:Red
    Name the output image:red_background
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:Yes

MeasureImageIntensity:[module_num:13|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
    Select images to measure:green_background, red_background
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
DisplayDataOnImage:[module_num:14|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:Cells
    Measurement to display:TrackObjects_Label
    Select the image on which to display the measurements:TrackedCells
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Adobe Devanagari
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:15|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enabled:False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
    Select the type of image to save:Movie/Stack
    Select the image to save:DisplayImage
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:tracked_cells
    Number of digits:2
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    Saved file format:tiff
    Output file location:Elsewhere...|D:\\Data\\MOI_data_temp_store\\20230829
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    How to save the series:T (Time)
    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\Data\\MOI_data_temp_store\\20230829\\\g<Date>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Intensity_UpperQuartileIntensity_green_background,Image|Intensity_UpperQuartileIntensity_red_background,Image|Intensity_StdIntensity_red_background,Image|Intensity_StdIntensity_green_background,Image|Intensity_PercentMaximal_green_background,Image|Intensity_PercentMaximal_red_background,Image|Intensity_MinIntensity_green_background,Image|Intensity_MinIntensity_red_background,Image|Intensity_MaxIntensity_green_background,Image|Intensity_MaxIntensity_red_background,Image|Intensity_LowerQuartileIntensity_red_background,Image|Intensity_LowerQuartileIntensity_green_background,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:\g<Date>_\g<Well_ID>_\g<FoV_ID>.csv
    Use the object name for the file name?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:\g<Date>_\g<Well_ID>_\g<FoV_ID>_background.csv
    Use the object name for the file name?:No
